PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = vSearchBeta1
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Routines
  Routine fixation1
    TextComponent fix1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instruction1
    TextComponent instr1
      letterHeight = 0.05
      pos = [0,0.1]
      startVal [time (s)] = 0.0
      text = In this task you will see sets of shapes made of four different shapes as outlined below. Only press the ‘s’ key if you see the upright “T” shape, which is the last shape. Otherwise, press the ‘k’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘space’ to continue.
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    KeyboardComponent keyResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent l1ex1
      image = L1.png
      pos = (-0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent l2ex1
      image = L2.png
      pos = (-0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent t1ex1
      image = T1.png
      pos = (0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent tTex1
      image = TT.png
      pos = (0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent codeFix1
      Code Type = Auto->JS
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to exit.
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    CodeComponent codeFix2
      Code Type = Auto->JS
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation2
    TextComponent fix2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial2
    TextComponent trial2Fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trial2L11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L13
      image = L1.png
      pos [set every repeat] = (loc13, loc14)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L14
      image = L1.png
      pos [set every repeat] = (loc15, loc16)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L23
      image = L2.png
      pos [set every repeat] = (loc17, loc18)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L24
      image = L2.png
      pos [set every repeat] = (loc19, loc20)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T13
      image = T1.png
      pos [set every repeat] = (loc21, loc22)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T14
      image = T1.png
      pos [set every repeat] = (loc23, loc24)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L15
      image = L1.png
      pos [set every repeat] = (loc25, loc26)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L16
      image = L1.png
      pos [set every repeat] = (loc27, loc28)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L25
      image = L2.png
      pos [set every repeat] = (loc29, loc30)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2L26
      image = L2.png
      pos [set every repeat] = (loc31, loc32)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T15
      image = T1.png
      pos [set every repeat] = (loc33, loc34)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2T16
      image = T1.png
      pos [set every repeat] = (loc35, loc36)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial2TT
      image = TT.png
      pos [set every repeat] = [loc37,loc38]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    KeyboardComponent trial2Resp
      allowedKeys = 's','k','w','e','a','d','z','x','i','o','j','m',',','l'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine fixation3
    TextComponent fix3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial3
    TextComponent trial3Fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trial3L11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L13
      image = L1.png
      pos [set every repeat] = (loc13, loc14)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L14
      image = L1.png
      pos [set every repeat] = (loc15, loc16)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L23
      image = L2.png
      pos [set every repeat] = (loc17, loc18)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L24
      image = L2.png
      pos [set every repeat] = (loc19, loc20)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T13
      image = T1.png
      pos [set every repeat] = (loc21, loc22)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T14
      image = T1.png
      pos [set every repeat] = (loc23, loc24)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L15
      image = L1.png
      pos [set every repeat] = (loc25, loc26)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L16
      image = L1.png
      pos [set every repeat] = (loc27, loc28)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L25
      image = L2.png
      pos [set every repeat] = (loc29, loc30)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3L26
      image = L2.png
      pos [set every repeat] = (loc31, loc32)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T15
      image = T1.png
      pos [set every repeat] = (loc33, loc34)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3T16
      image = T1.png
      pos [set every repeat] = (loc35, loc36)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trial3TT
      image = TT.png
      pos [set every repeat] = [loc37,loc38]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    KeyboardComponent trial3Resp
      allowedKeys = 's','k','w','e','a','d','z','x','i','o','j','m',',','l'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine trial
    TextComponent trialFix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trialL11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL13
      image = L1.png
      pos [set every repeat] = (loc13, loc14)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL14
      image = L1.png
      pos [set every repeat] = (loc15, loc16)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL23
      image = L1.png
      pos [set every repeat] = (loc17, loc18)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL24
      image = L2.png
      pos [set every repeat] = (loc19, loc20)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT13
      image = T1.png
      pos [set every repeat] = (loc21, loc22)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT14
      image = T1.png
      pos [set every repeat] = (loc23, loc24)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL15
      image = L1.png
      pos [set every repeat] = (loc25, loc26)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL16
      image = L1.png
      pos [set every repeat] = (loc27, loc28)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL25
      image = L2.png
      pos [set every repeat] = (loc29, loc30)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL26
      image = L2.png
      pos [set every repeat] = (loc31, loc32)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT15
      image = T1.png
      pos [set every repeat] = (loc33, loc34)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT16
      image = T1.png
      pos [set every repeat] = (loc35, loc36)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialTT
      image = TT.png
      pos [set every repeat] = [loc37,loc38]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    KeyboardComponent trialResp
      allowedKeys = 's','k','w','e','a','d','z','x','i','o','j','m',',','l'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine instruction2
    TextComponent instr2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = A quick break before the next set of trials. Remember, only press the ‘s’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘k’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘space’ to continue.
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    KeyboardComponent keyResp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent l1ex2
      image = L1.png
      pos = (-0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent l2ex2
      image = L2.png
      pos = (-0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent t1ex2
      image = T1.png
      pos = (0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent tTex2
      image = TT.png
      pos = (0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine instruction3
    TextComponent instr3
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = A quick break before the next set of trials. Remember, only press the ‘s’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘k’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘space’ to continue.
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    KeyboardComponent keyResp3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent l1ex3
      image = L1.png
      pos = (-0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent l2ex3
      image = L2.png
      pos = (-0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent t1ex3
      image = T1.png
      pos = (0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent tTex3
      image = TT.png
      pos = (0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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Flow
  Routine instruction1
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = vSearchCond1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', -0.2), ('loc2', -0.2), ('loc3', -0.4), ('loc4', 0.4), ('loc5', -0.4), ('loc6', 0.0), ('loc7', 0.4), ('loc8', 0.2), ('loc9', -0.4), ('loc10', -0.4), ('loc11', 0.4), ('loc12', -0.2), ('loc13', 0.4), ('loc14', 0.4), ('loc15', 0.2), ('loc16', 0.4), ('loc17', 0.0), ('loc18', 0.2), ('loc19', 0.2), ('loc20', 0.0), ('loc21', 0.2), ('loc22', -0.4), ('loc23', -0.2), ('loc24', 0.4), ('loc25', 0.0), ('loc26', -0.4), ('loc27', -0.2), ('loc28', 0.2), ('loc29', 0.2), ('loc30', 0.2), ('loc31', -0.2), ('loc32', 0.0), ('loc33', 0.2), ('loc34', -0.2), ('loc35', 0.4), ('loc36', -0.4), ('loc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,
      OrderedDict([('loc1', 0.4), ('loc2', 0.0), ('loc3', -0.2), ('loc4', 0.2), ('loc5', -0.4), ('loc6', 0.0), ('loc7', -0.4), ('loc8', -0.2), ('loc9', 0.4), ('loc10', 0.2), ('loc11', 0.0), ('loc12', 0.2), ('loc13', -0.4), ('loc14', 0.4), ('loc15', -0.4), ('loc16', 0.2), ('loc17', -0.2), ('loc18', 0.0), ('loc19', -0.2), ('loc20', -0.2), ('loc21', -0.2), ('loc22', -0.4), ('loc23', 0.0), ('loc24', -0.2), ('loc25', None), ('loc26', None), ('loc27', None), ('loc28', None), ('loc29', None), ('loc30', None), ('loc31', None), ('loc32', None), ('loc33', None), ('loc34', None), ('loc35', None), ('loc36', Non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,
      OrderedDict([('loc1', -0.4), ('loc2', -0.2), ('loc3', 0.4), ('loc4', -0.2), ('loc5', 0.4), ('loc6', 0.2), ('loc7', 0.4), ('loc8', 0.0), ('loc9', 0.2), ('loc10', 0.2), ('loc11', 0.0), ('loc12', 0.2), ('loc13', -0.4), ('loc14', -0.4), ('loc15', 0.0), ('loc16', -0.4), ('loc17', 0.2), ('loc18', 0.4), ('loc19', -0.2), ('loc20', -0.4), ('loc21', -0.2), ('loc22', 0.4), ('loc23', 0.4), ('loc24', -0.4), ('loc25', -0.4), ('loc26', 0.2), ('loc27', -0.4), ('loc28', 0.0), ('loc29', -0.2), ('loc30', 0.2), ('loc31', 0.2), ('loc32', -0.4), ('loc33', 0.0), ('loc34', -0.2), ('loc35', 0.0), ('loc36', 0.4), ('loc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,
      OrderedDict([('loc1', 0.2), ('loc2', -0.2), ('loc3', None), ('loc4', None), ('loc5', 0.4), ('loc6', -0.2), ('loc7', -0.4), ('loc8', 0.0), ('loc9', 0.4), ('loc10', 0.2), ('loc11', 0.0), ('loc12', 0.2), ('loc13', -0.4), ('loc14', 0.2), ('loc15', -0.4), ('loc16', -0.2), ('loc17', -0.2), ('loc18', 0.4), ('loc19', -0.2), ('loc20', 0.2), ('loc21', -0.2), ('loc22', 0.0), ('loc23', 0.2), ('loc24', 0.0), ('loc25', None), ('loc26', None), ('loc27', None), ('loc28', None), ('loc29', None), ('loc30', None), ('loc31', None), ('loc32', None), ('loc33', None), ('loc34', None), ('loc35', None), ('loc36', None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
    Routine trial
  LoopTerminator trials1
  Routine instruction2
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = vSearchCond2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', 0.2), ('loc2', -0.2), ('loc3', -0.4), ('loc4', -0.2), ('loc5', 0.2), ('loc6', 0.0), ('loc7', -0.2), ('loc8', -0.2), ('loc9', None), ('loc10', None), ('loc11', 0.4), ('loc12', 0.4), ('loc13', None), ('loc14', None), ('loc15', None), ('loc16', None), ('loc17', None), ('loc18', None), ('loc19', None), ('loc20', None), ('loc21', None), ('loc22', None), ('loc23', None), ('loc24', None), ('loc25', None), ('loc26', None), ('loc27', None), ('loc28', None), ('loc29', None), ('loc30', None), ('loc31', None), ('loc32', None), ('loc33', None), ('loc34', None), ('loc35', None), ('loc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,
      OrderedDict([('loc1', 0.4), ('loc2', 0.0), ('loc3', 0.4), ('loc4', 0.2), ('loc5', 0.0), ('loc6', 0.2), ('loc7', 0.2), ('loc8', 0.2), ('loc9', 0.4), ('loc10', -0.2), ('loc11', -0.4), ('loc12', -0.2), ('loc13', -0.4), ('loc14', -0.4), ('loc15', 0.0), ('loc16', -0.4), ('loc17', 0.2), ('loc18', 0.4), ('loc19', -0.2), ('loc20', -0.4), ('loc21', -0.4), ('loc22', 0.4), ('loc23', 0.4), ('loc24', -0.4), ('loc25', None), ('loc26', None), ('loc27', None), ('loc28', None), ('loc29', None), ('loc30', None), ('loc31', None), ('loc32', None), ('loc33', None), ('loc34', None), ('loc35', None), ('loc36', None)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,
      OrderedDict([('loc1', 0.0), ('loc2', 0.0), ('loc3', None), ('loc4', None), ('loc5', 0.4), ('loc6', -0.2), ('loc7', -0.2), ('loc8', 0.2), ('loc9', 0.2), ('loc10', 0.2), ('loc11', 0.4), ('loc12', 0.0), ('loc13', -0.2), ('loc14', -0.4), ('loc15', 0.4), ('loc16', -0.4), ('loc17', 0.2), ('loc18', 0.4), ('loc19', 0.2), ('loc20', -0.4), ('loc21', 0.4), ('loc22', 0.2), ('loc23', 0.4), ('loc24', 0.4), ('loc25', None), ('loc26', None), ('loc27', None), ('loc28', None), ('loc29', None), ('loc30', None), ('loc31', None), ('loc32', None), ('loc33', None), ('loc34', None), ('loc35', None), ('loc36', None), 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,
      OrderedDict([('loc1', 0.0), ('loc2', -0.2), ('loc3', -0.4), ('loc4', 0.4), ('loc5', -0.4), ('loc6', 0.2), ('loc7', 0.4), ('loc8', 0.2), ('loc9', -0.4), ('loc10', 0.0), ('loc11', 0.2), ('loc12', 0.4), ('loc13', 0.4), ('loc14', 0.0), ('loc15', None), ('loc16', None), ('loc17', 0.0), ('loc18', 0.4), ('loc19', -0.2), ('loc20', -0.2), ('loc21', 0.2), ('loc22', 0.2), ('loc23', 0.2), ('loc24', -0.4), ('loc25', -0.4), ('loc26', -0.4), ('loc27', 0.2), ('loc28', 0.0), ('loc29', -0.2), ('loc30', 0.2), ('loc31', 0.4), ('loc32', -0.2), ('loc33', -0.2), ('loc34', 0.0), ('loc35', 0.0), ('loc36', 0.2), ('loc3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
    Routine trial
  LoopTerminator trials2
  Routine instruction3
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = vSearchCond3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('loc1', -0.4), ('loc2', -0.2), ('loc3', 0.2), ('loc4', 0.2), ('loc5', 0.0), ('loc6', 0.0), ('loc7', 0.4), ('loc8', -0.2), ('loc9', 0.4), ('loc10', 0.2), ('loc11', -0.2), ('loc12', 0.2), ('loc13', -0.2), ('loc14', -0.4), ('loc15', 0.0), ('loc16', -0.4), ('loc17', 0.2), ('loc18', 0.4), ('loc19', 0.2), ('loc20', -0.4), ('loc21', 0.0), ('loc22', 0.4), ('loc23', 0.4), ('loc24', -0.4), ('loc25', -0.4), ('loc26', -0.4), ('loc27', 0.2), ('loc28', 0.0), ('loc29', 0.4), ('loc30', 0.0), ('loc31', -0.2), ('loc32', -0.2), ('loc33', -0.2), ('loc34', 0.0), ('loc35', 0.0), ('loc36', -0.2), ('lo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,
      OrderedDict([('loc1', 0.2), ('loc2', -0.2), ('loc3', None), ('loc4', None), ('loc5', 0.4), ('loc6', -0.2), ('loc7', -0.4), ('loc8', 0.0), ('loc9', 0.4), ('loc10', 0.2), ('loc11', 0.0), ('loc12', 0.2), ('loc13', -0.4), ('loc14', -0.4), ('loc15', 0.0), ('loc16', -0.4), ('loc17', 0.2), ('loc18', 0.4), ('loc19', 0.0), ('loc20', -0.2), ('loc21', -0.4), ('loc22', 0.4), ('loc23', 0.4), ('loc24', -0.4), ('loc25', -0.4), ('loc26', 0.2), ('loc27', -0.4), ('loc28', -0.2), ('loc29', -0.2), ('loc30', 0.4), ('loc31', -0.2), ('loc32', 0.2), ('loc33', -0.2), ('loc34', 0.0), ('loc35', 0.2), ('loc36', 0.0), ('l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,
      OrderedDict([('loc1', -0.2), ('loc2', 0.2), ('loc3', 0.4), ('loc4', -0.2), ('loc5', 0.0), ('loc6', 0.2), ('loc7', 0.0), ('loc8', -0.2), ('loc9', -0.4), ('loc10', -0.2), ('loc11', 0.0), ('loc12', 0.0), ('loc13', -0.4), ('loc14', -0.4), ('loc15', 0.4), ('loc16', -0.4), ('loc17', 0.0), ('loc18', 0.4), ('loc19', -0.2), ('loc20', -0.4), ('loc21', -0.2), ('loc22', 0.4), ('loc23', 0.2), ('loc24', 0.4), ('loc25', None), ('loc26', None), ('loc27', None), ('loc28', None), ('loc29', None), ('loc30', None), ('loc31', None), ('loc32', None), ('loc33', None), ('loc34', None), ('loc35', None), ('loc36', None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,
      OrderedDict([('loc1', 0.0), ('loc2', -0.4), ('loc3', 0.2), ('loc4', 0.2), ('loc5', -0.2), ('loc6', -0.4), ('loc7', 0.4), ('loc8', 0.0), ('loc9', None), ('loc10', None), ('loc11', 0.2), ('loc12', 0.4), ('loc13', None), ('loc14', None), ('loc15', None), ('loc16', None), ('loc17', None), ('loc18', None), ('loc19', None), ('loc20', None), ('loc21', None), ('loc22', None), ('loc23', None), ('loc24', None), ('loc25', None), ('loc26', None), ('loc27', None), ('loc28', None), ('loc29', None), ('loc30', None), ('loc31', None), ('loc32', None), ('loc33', None), ('loc34', None), ('loc35', None), ('loc36'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
    Routine trial
  LoopTerminator trials3
  Routine end
